PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = new_grating_pattern_glare
  logging level = debug
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Routines
  Routine trial
    GratingComponent pattern1_grating
      color = $[-1,-1,-1]
      mask = circle
      ori = 90
      phase = 0
      pos = (0, 1.75)
      saveStartStop = False
      sf = 0.3
      size = (13.77, 13.77)
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
      units = deg
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    CodeComponent pattern1_code
      Code Type = Py
      Begin Experiment:
        # changing the pattern texture resolution 'manually' because
        # the highest resolution by default in the PsychoPy Builder View
        # is 512
        pattern1_grating.texRes = 2048
      Begin Routine:
        mouse.status == STARTED
        buttons = []
      Each Frame:
        buttons = mouse.getPressed()
        # at least one button has been pressed
        if sum(buttons) > 0:
            # check if the mouse was inside our 'clickable' object
            if polygon.contains(mouse) and slider.getRating() is not None:
                continueRoutine = False
                gotValidClick = True
                confirm_click_time = tThisFlip
      End Routine:
        trials.addData('confirm_click_time', confirm_click_time)
    PolygonComponent pattern1_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = (0, 1.75)
      saveStartStop = False
      shape = line
      size = (13.77, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent pattern1_mid_circle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 120
      pos = (0, 1.75)
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ('Extremt obehagligt','','','','','','','','','', 'Extremt behagligt')
      pos = (0, -6.5)
      saveStartStop = False
      size = (25, 1)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = (-5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5)
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      pos = (0, -9.5)
      saveStartStop = False
      shape = rectangle
      size = (6, 2)
      startVal [time (s)] = 0.0
      units = deg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials
